CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Input the raw ratiometric calcium imaging photos here. Can drag and drop or double-click.']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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (or (file does contain "0005") (file does contain "0045"))

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Optional -- change metadata if warranted']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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Cell
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Convert multicolored image to gray']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
    Select the input image:Cell
    Conversion method:Combine
    Image type:Channels
    Name the output image:OrigGray
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    Channel count:3
    Channel number:1
    Relative weight of the channel:1.0
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    Channel number:2
    Relative weight of the channel:0.5
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    Channel number:3
    Relative weight of the channel:0.1
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
ColorToGray:[module_num:6|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notes:['Split image into individual pseudo-channels']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
    Select the input image:Cell
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
ImageMath:[module_num:7|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notes:['Invert the blue channel']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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:InvertedBlue
    Image or measurement?:Image
    Select the first image:OrigBlue
    Multiply the first image by:1
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:8|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notes:['Identify inverted blue cells (cells lacking abundant intracellular calcium concentrations)']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
    Select the input image:InvertedBlue
    Name the primary objects to be identified:DarkCells
    Typical diameter of objects, in pixel units (Min,Max):25,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.35,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:120
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:9|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notes:['Identify cells high in intracellular calcium (green channel)']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
    Select the input image:OrigGreen
    Name the primary objects to be identified:CalciumExpressingCells
    Typical diameter of objects, in pixel units (Min,Max):25,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.3,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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    Size of adaptive window:120
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    Thresholding method:Otsu

CombineObjects:[module_num:10|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notes:['Combine green with inverted blue identified cells to merge into a dataset containing ALL cells']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
    Select initial object set:DarkCells
    Select object set to combine:CalciumExpressingCells
    Select how to handle overlapping objects:Merge
    Name the combined object set:AllCells

MeasureObjectIntensity:[module_num:11|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notes:['Quantify intensity of cells ']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
    Select images to measure:OrigGreen
    Select objects to measure:AllCells, CalciumExpressingCells

OverlayObjects:[module_num:12|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notes:['Optional -- For visualization and to check accuracy of the programs ability to distinguish cells with high vs low intracellular calcium']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
    Input:OrigGray
    Name the output image:OverlayObjects
    Objects:AllCells
    Opacity:0.2

Tile:[module_num:13|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notes:['Optional - only for visualization ']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
    Select an input image:Cell
    Name the output image:TiledImage
    Tile assembly method:Within cycles
    Final number of rows:8
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:OverlayObjects

SaveImages:[module_num:14|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notes:['Optional - only for visualization ']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
    Select the type of image to save:Image
    Select the image to save:TiledImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:Cell
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:conditionX_
    Saved file format:png
    Output file location:Elsewhere...|C:\\
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:15|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notes:['Change pathname to save directory. Export measurements']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|C:\\User
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:CalciumExpressingCells|Location_MaxIntensity_Z_OrigGreen,CalciumExpressingCells|Location_MaxIntensity_X_OrigGreen,CalciumExpressingCells|Location_MaxIntensity_Y_OrigGreen,CalciumExpressingCells|Location_Center_Y,CalciumExpressingCells|Location_Center_X,CalciumExpressingCells|Location_Center_Z,CalciumExpressingCells|Location_CenterMassIntensity_X_OrigGreen,CalciumExpressingCells|Location_CenterMassIntensity_Z_OrigGreen,CalciumExpressingCells|Location_CenterMassIntensity_Y_OrigGreen,CalciumExpressingCells|Intensity_IntegratedIntensity_OrigGreen,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:conditionX_
    Overwrite existing files without warning?:Yes
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