CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:23
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Pipeline to identify stress granules of G3BP1-GFP using the 520-UTR. ', 'To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.']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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (file doesnot contain "(c1+") (file doesnot contain ".XML")

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', 'Note: this pipeline works best with a 6-8 h induction period.']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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Date": "none", "FileLocation": "text", "Frame": "integer", "Series": "none"}
    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', 'Change c0 / c1 to equivalent identifier you used to distinquish the DAPI vs GFP channels.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "c0")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "c1")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:ChannelName

IdentifyPrimaryObjects:[module_num:5|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notes:['Identifies and segregates nueclei by size (120-400 pixels) and shape from the DAPI channel. Uses global Otsu thresholding. The threshold parameters are set as follows: threshold smoothing scale: 0; threshold correction factor: 1; lower and upper bounds on threshold: 0.0075-1.0.', '']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):120,400
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0075,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:6|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notes:['Identifies entire cell based on diffuse GFP signal and associates with corresponding nucleus.']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
    Select the input objects:Nuclei
    Name the objects to be identified:GFP_Secondary
    Select the method to identify the secondary objects:Propagation
    Select the input image:GFP
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    Regularization factor:0.5
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.015,1.0
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    Log transform before thresholding?:No
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
MeasureObjectIntensity:[module_num:7|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notes:['Measures object intensity of the total GFP/cell']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
    Select images to measure:GFP
    Select objects to measure:GFP_Secondary

FilterObjects:[module_num:8|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notes:['Filter transfected vs non-transfected cells using GFP thresholding. ']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
    Select the objects to filter:GFP_Secondary
    Name the output objects:GFP_transfected
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MaxIntensity_GFP
    Filter using a minimum measurement value?:Yes
    Minimum value:0.05
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:9|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notes:['Mask the nucleus in each cell so that ony extranuclear granules are identified']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
    Select objects to be masked:GFP_transfected
    Name the masked objects:Nucleus_transfected
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

EnhanceOrSuppressFeatures:[module_num:10|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notes:['Enhances stress granules up to 30 pixels in diameter. Suppresses background signal']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
    Select the input image:GFP
    Name the output image:EnhanceGFP_rescale
    Select the operation:Enhance
    Feature size:30
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:11|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notes:['Identifies small stress granules between 6-40 pixels. Uses lower thresholding range (0.04-1.0) than the WT G3BP1-GFP due to differences in intensity. Based off Enhanced GFP image.']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
    Select the input image:EnhanceGFP_rescale
    Name the primary objects to be identified:GFP_foci_small
    Typical diameter of objects, in pixel units (Min,Max):6,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.04,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:12|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notes:['Identifies larger stress granules/aggregates. Between 30-100 pixels. Lower-bound intensity is set to 0.35 for the 520 UTR version']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
    Select the input image:GFP
    Name the primary objects to be identified:GFP_foci_large
    Typical diameter of objects, in pixel units (Min,Max):30,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.35,1.0
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    Log transform before thresholding?:No
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
MaskObjects:[module_num:13|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notes:['Masks redundant, overlapping granules detected in both small and large SG identification steps (depending on overlap).']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
    Select objects to be masked:GFP_foci_small
    Name the masked objects:GFP_foci_small_masked
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:GFP_foci_large
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.5
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

CombineObjects:[module_num:14|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notes:['Combines the small and large granules to a single object.']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
    Select initial object set:GFP_foci_large
    Select object set to combine:GFP_foci_small_masked
    Select how to handle overlapping objects:Merge
    Name the combined object set:GFP_foci_combined

RelateObjects:[module_num:15|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notes:['Relates the combined set of small/large SGs to each associated transfected cell.']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
    Parent objects:GFP_transfected
    Child objects:GFP_foci_combined
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:StressGranules
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
RelateObjects:[module_num:16|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notes:['Relates only the small SGs to each associated transfected cell.']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
    Parent objects:GFP_transfected
    Child objects:GFP_foci_small_masked
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:StressGranules_small
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
RelateObjects:[module_num:17|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notes:['Relates only the large SGs to each associated transfected cell.']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
    Parent objects:GFP_transfected
    Child objects:GFP_foci_large
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:StressGranules_large
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
ConvertObjectsToImage:[module_num:18|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notes:['(optional)']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
    Select the input objects:GFP_Secondary
    Name the output image:CellImage
    Select the color format:Color
    Select the colormap:Default

MeasureObjectSizeShape:[module_num:19|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notes:['Measures the size and shape of the stress granules ']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
    Select object sets to measure:GFP_foci_combined, StressGranules, StressGranules_large, StressGranules_small
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

MeasureObjectIntensity:[module_num:20|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notes:['Measures intensity of stress granules ']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
    Select images to measure:GFP
    Select objects to measure:GFP_foci_combined, GFP_transfected, StressGranules, StressGranules_large, StressGranules_small

OverlayOutlines:[module_num:21|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notes:['Overlays the small SGs (green) with the larger SGs/aggregates (orange) over each transfected cell (red)']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:GFP
    Name the output image:GFP_overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:green
    Select objects to display:StressGranules_small
    Select outline color:red
    Select objects to display:GFP_transfected
    Select outline color:#FF8040
    Select objects to display:StressGranules_large

SaveImages:[module_num:22|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notes:['Saves image to specified file location. Must input where you would like the images to be saved.']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
    Select the type of image to save:Image
    Select the image to save:GFP_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:UTR_Replicate
    Saved file format:png
    Output file location:Elsewhere...|C:/User/
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:23|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notes:['Saves Excel to specified file location. Must input where you would like the images to be saved.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|C:\\User\\
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:StressGranules_large|AreaShape_SpatialMoment_2_0,StressGranules_large|AreaShape_SpatialMoment_2_1,StressGranules_large|AreaShape_SpatialMoment_2_3,StressGranules_large|AreaShape_SpatialMoment_2_2,StressGranules_large|AreaShape_SpatialMoment_0_2,StressGranules_large|AreaShape_SpatialMoment_0_0,StressGranules_large|AreaShape_SpatialMoment_0_3,StressGranules_large|AreaShape_SpatialMoment_0_1,StressGranules_large|AreaShape_SpatialMoment_1_2,StressGranules_large|AreaShape_SpatialMoment_1_0,StressGranules_large|AreaShape_SpatialMoment_1_3,StressGranules_large|AreaShape_SpatialMoment_1_1,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:UTR_replicate_
    Overwrite existing files without warning?:Yes
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